CellProfiler Pipeline: http://www.cellprofiler.org
Version:1
SVNRevision:11710

LoadImages:[module_num:1|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notes:['Optimal image parameters (based on my -Leo- images):', '[1] Average z-projection of 4 slices', '[2] Works best on regions with LOW density DAPI cells', '[3] Accepts three input images (DAPI for the outline - FOS, CAMKII, WFA for intensity measure)', '', '']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
    File type to be loaded:individual images
    File selection method:Text-Exact match
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    Analyze all subfolders within the selected folder?:None
    Input image file location:Default Input Folder|None
    Check image sets for missing or duplicate files?:Yes
    Group images by metadata?:No
    Exclude certain files?:No
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    Image count:3
    Text that these images have in common (case-sensitive):dapi
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    Extract metadata from where?:None
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:imageIN
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    Rescale intensities?:Yes
    Text that these images have in common (case-sensitive):fos
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    Extract metadata from where?:None
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:fos
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    Rescale intensities?:Yes
    Text that these images have in common (case-sensitive):camkii
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    Extract metadata from where?:None
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:camkii
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    Rescale intensities?:Yes

CorrectIlluminationCalculate:[module_num:2|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
    Select the input image:imageIN
    Name the output image:IllumBlue
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:No smoothing
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    Retain the averaged image for use later in the pipeline (for example, in SaveImages)?:No
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    Retain the dilated image for use later in the pipeline (for example, in SaveImages)?:No
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
Smooth:[module_num:3|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
    Select the input image:IllumBlue
    Name the output image:FilteredImage
    Select smoothing method:Median Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter, in  pixels:4
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
IdentifyPrimaryObjects:[module_num:4|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
    Select the input image:FilteredImage
    Name the primary objects to be identified:DAPI_Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,300
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Select the thresholding method:Otsu Global
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.000000,1.000000
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    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Propagate
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Name the outline image:PrimaryOutlines
    Fill holes in identified objects?:Yes
    Automatically calculate size of smoothing filter?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
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    Retain outlines of the identified objects?:Yes
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Entropy
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    Handling of objects if excessive number of objects identified:Continue
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
MeasureObjectIntensity:[module_num:5|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
    Hidden:2
    Select an image to measure:fos
    Select an image to measure:camkii
    Select objects to measure:DAPI_Nuclei

ExportToSpreadsheet:[module_num:6|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
    Select or enter the column delimiter:Tab
    Prepend the output file name to the data file names?:Yes
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the columns of measurements to export?:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|None
    Create a GenePattern GCT file?:No
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    Export all measurements, using default file names?:Yes
    Press button to select measurements to export:DAPI_Nuclei|Intensity_IntegratedIntensity_camkii,DAPI_Nuclei|Intensity_IntegratedIntensity_fos,DAPI_Nuclei|Location_Center_Y,DAPI_Nuclei|Location_Center_X
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
OverlayOutlines:[module_num:7|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:fos
    Name the output image:Fos pattern
    Select outline display mode:Color
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    Width of outlines:1
    Select outlines to display:PrimaryOutlines
    Select outline color:Blue

OverlayOutlines:[module_num:8|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:camkii
    Name the output image:camkii pattern
    Select outline display mode:Color
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    Width of outlines:1
    Select outlines to display:PrimaryOutlines
    Select outline color:Blue
